PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.1.0
  Window size (pixels) = [1440, 900]
  expName = DelayDiscountingNikitaA
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/nikitaamresh/Desktop/discounting 2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 69, 'future_reward': 88, 'delay': 42},
      {'reward_today': 60, 'future_reward': 83, 'delay': 61},
      {'reward_today': 39, 'future_reward': 83, 'delay': 83},
      {'reward_today': 26, 'future_reward': 88, 'delay': 200},
      {'reward_today': 65, 'future_reward': 81, 'delay': 81},
      {'reward_today': 29, 'future_reward': 86, 'delay': 44},
      {'reward_today': 28, 'future_reward': 87, 'delay': 120},
      {'reward_today': 47, 'future_reward': 84, 'delay': 78},
      {'reward_today': 55, 'future_reward': 81, 'delay': 153},
      {'reward_today': 41, 'future_reward': 81, 'delay': 22},
      {'reward_today': 60, 'future_reward': 79, 'delay': 48},
      {'reward_today': 72, 'future_reward': 82, 'delay': 155},
      {'reward_today': 48, 'future_reward': 79, 'delay': 29},
      {'reward_today': 46, 'future_reward': 81, 'delay': 106},
      {'reward_today': 73, 'future_reward': 83, 'delay': 9},
      {'reward_today': 34, 'future_reward': 80, 'delay': 24},
      {'reward_today': 26, 'future_reward': 88, 'delay': 88},
      {'reward_today': 56, 'future_reward': 80, 'delay': 87},
      {'reward_today': 47, 'future_reward': 85, 'delay': 140},
      {'reward_today': 53, 'future_reward': 81, 'delay': 85}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
    Routine trial
  LoopTerminator trials
